# ODE equations corresponding to CaseStudy1_Li6_GRN.txt
# k=1, a=0.5, b=0.1, self_a=0.8, d=0.01, hill=4, s=0.5
MDM2'=0.5*P53^4.0/(P53^4.0+0.5^4.0)+0.1*0.5^4.0/(miR145^4.0+0.5^4.0)-1*MDM2
OCT4'=0.8*OCT4^4.0/(OCT4^4.0+0.5^4.0)+0.1*0.5^4.0/(P53^4.0+0.5^4.0)+0.1*0.5^4.0/(miR145^4.0+0.5^4.0)-1*OCT4
P53'=0.1*0.5^4.0/(MDM2^4.0+0.5^4.0)+0.8*P53^4.0/(P53^4.0+0.5^4.0)-1*P53
ZEB'=0.8*ZEB^4.0/(ZEB^4.0+0.5^4.0)+0.1*0.5^4.0/(miR145^4.0+0.5^4.0)+0.1*0.5^4.0/(miR200^4.0+0.5^4.0)-1*ZEB
miR145'=0.1*0.5^4.0/(OCT4^4.0+0.5^4.0)+0.5*P53^4.0/(P53^4.0+0.5^4.0)+0.1*0.5^4.0/(ZEB^4.0+0.5^4.0)-1*miR145
miR200'=0.5*OCT4^4.0/(OCT4^4.0+0.5^4.0)+0.5*P53^4.0/(P53^4.0+0.5^4.0)+0.1*0.5^4.0/(ZEB^4.0+0.5^4.0)-1*miR200